PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = FreeRecall
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine Bienvenida
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    TextComponent welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        ¡Bienvenido a nuestro experimento de memoria semántica!

        Presiona 'space' para continuar
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instrucciones
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    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        En esta tarea comenzarás a ver una lista de palabras palabras
        Deberás recordar la mayor cantidad de palabras que puedas, para luego decirnos todas las que recuerdas.
        Comenzarás con 5 repeticiones de prueba.

        Presiona 'space' para continuar
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fin_practica
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    TextComponent practice_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ha finalizado el período de práctica. A partir de ahora, los resultados que obtengas serán tenidos en cuenta.

        Presiona 'space' para continuar
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation
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    PolygonComponent fixation_cross
      fillColor = white
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine free_recall
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    TextboxComponent completion_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder = Escribe aquí...
      pos = (0, -0.20)
      size = (0.8, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        Escribe todas las palabras que recurdes, separadas por punto ('.'), y sin tildes ni mayusculas

        Ejemplo: oso.verde.etc

        Pulsa 'right' para continuar
    KeyboardComponent key_resp_4
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fin_practica_2
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ha finalizado la práctica. A partir de ahora, tendremos en cuenta tus resultados para nuestro análisis.

        Presiona 'enter' para continuar
    KeyboardComponent key_resp_5
      allowedKeys = 'enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fin
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ha finalizado el experimento. Muchas gracias por participar!

        Presiona 'space'
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine word_practica
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    TextComponent word_practica_text
      letterHeight = 0.05
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $words.split(',')[palabra_practica.thisN]
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    KeyboardComponent examiner_quit
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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  Routine word
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    TextComponent word_text
      letterHeight = 0.05
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $words.split(',')[palabras.thisN]
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  Routine math
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    TextComponent cuenta
      letterHeight = 0.05
      pos = (0, 0.20)
      startVal [time (s)] = 0.0
      text [set every frame] = $problem
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    TextboxComponent cuenta_response
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder = Resultado...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        idx_random = [0]
      Begin Routine:
        import random

        idx_random = [random.choice(range(100))]
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = Resuelve la siguiente cuenta. Presiona 'space' cuando termines
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Flow
  Routine Bienvenida
  Routine instrucciones
  LoopInitiator trials_practica loopType="TrialHandler"
    conditionsFile = conditions_practica.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('heterogeneity', 0.3), ('words', 'granada,negro,pera,violeta,higo,mango,arándano,banana,manzana,gris,frambuesa,lila,mora,melocotón,melón,blanco,frutilla,sandía,azul,ciruela')]),
      OrderedDict([('heterogeneity', 0.0), ('words', 'mango,granada,arándano,kiwi,manzana,piña,higo,mora,pera,frambuesa,frutilla,melocotón,uva,cereza,sandía,melón,ciruela,banana,durazno,papaya')]),
      OrderedDict([('heterogeneity', 0.9), ('words', 'rosa,rojo,gris,lavanda,beige,negro,morado,papaya,cian,blanco,granada,amarillo,granate,azul,verde,turquesa,ocre,violeta,dorado,celeste')]),
      OrderedDict([('heterogeneity', 0.6), ('words', 'lila,granada,verde,violeta,ciruela,cian,marrón,banana,granate,morado,arándano,gris,pera,piña,rosa,lavanda,celeste,frambuesa,rojo,mora')])]
    Routine fixation
    LoopInitiator palabra_practica loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = len(words.split(','))
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      Routine word_practica
    LoopTerminator palabra_practica
    Routine free_recall
    LoopInitiator cuenta_math_loop loopType="TrialHandler"
      Selected rows = $idx_random
      conditionsFile = conditions_cuentas.csv
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('problem', '(8 - 4) - 6'), ('correct_result', -2)]),
        OrderedDict([('problem', '(4 x 6) x 2'), ('correct_result', 48)]),
        OrderedDict([('problem', '(9 x 1) + 2'), ('correct_result', 11)]),
        OrderedDict([('problem', '(1 + 4) + 9'), ('correct_result', 14)]),
        OrderedDict([('problem', '(4 - 8) - 2'), ('correct_result', -6)]),
        OrderedDict([('problem', '(9 + 8) + 6'), ('correct_result', 23)]),
        OrderedDict([('problem', '(5 + 2) x 6'), ('correct_result', 42)]),
        OrderedDict([('problem', '(3 x 6) + 4'), ('correct_result', 22)]),
        OrderedDict([('problem', '(3 x 8) + 7'), ('correct_result', 31)]),
        OrderedDict([('problem', '(7 x 3) x 4'), ('correct_result', 84)]),
        OrderedDict([('problem', '(3 + 5) + 6'), ('correct_result', 14)]),
        OrderedDict([('problem', '(4 + 2) x 5'), ('correct_result', 30)]),
        OrderedDict([('problem', '(1 - 5) + 8'), ('correct_result', 4)]),
        OrderedDict([('problem', '(9 x 6) - 8'), ('correct_result', 46)]),
        OrderedDict([('problem', '(4 - 2) x 8'), ('correct_result', 16)]),
        OrderedDict([('problem', '(6 x 8) + 1'), ('correct_result', 49)]),
        OrderedDict([('problem', '(8 + 5) - 8'), ('correct_result', 5)]),
        OrderedDict([('problem', '(2 - 9) x 6'), ('correct_result', -42)]),
        OrderedDict([('problem', '(3 x 2) + 3'), ('correct_result', 9)]),
        OrderedDict([('problem', '(2 - 8) + 5'), ('correct_result', -1)]),
        OrderedDict([('problem', '(2 x 4) x 4'), ('correct_result', 32)]),
        OrderedDict([('problem', '(7 x 2) + 6'), ('correct_result', 20)]),
        OrderedDict([('problem', '(7 + 3) - 8'), ('correct_result', 2)])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
      Routine math
    LoopTerminator cuenta_math_loop
  LoopTerminator trials_practica
  Routine fin_practica
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('heterogeneity', 0.875), ('words', 'ardilla,tortuga,león,pingüino,koala,colibri,canguro,violeta,oso,rinoceronte,tigre,elefante,hipopótamo,mono,azul,zorro'), ('max_category', 'animals'), ('min_category', 'colors')]),
      OrderedDict([('heterogeneity', 0.625), ('words', 'saxofón,buho,aguila,flauta,clarinete,tortuga,elefante,colibri,contrabajo,batería,xilófono,acordeón,trombón,zorro,oboe,ukelele'), ('max_category', 'instruments'), ('min_category', 'animals')]),
      OrderedDict([('heterogeneity', 0.0), ('words', 'zorro,koala,tiburón,tortuga,rinoceronte,león,pingüino,elefante,oso,colibri,tigre,panda,ardilla,delfín,cebra,aguila'), ('max_category', 'instruments'), ('min_category', 'animals')]),
      OrderedDict([('heterogeneity', 0.25), ('words', 'violonchelo,rosa,turquesa,ocre,lavanda,azul,armónica,cian,banjo,lila,celeste,batería,verde,morado,rojo,violeta'), ('max_category', 'instruments'), ('min_category', 'colors')]),
      OrderedDict([('heterogeneity', 0.5), ('words', 'kiwi,flauta,mora,ciruela,timbal,piña,mandolina,sandía,guitarra,maracuya,cereza,melocotón,arpa,tambor,fagot,xilófono'), ('max_category', 'fruits'), ('min_category', 'instruments')]),
      OrderedDict([('heterogeneity', 0.375), ('words', 'ballena,hipopótamo,batería,conejo,tambor,trompeta,colibri,oboe,banjo,tiburón,cocodrilo,mono,trombón,camello,oso,halcón'), ('max_category', 'instruments'), ('min_category', 'animals')])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
    Routine fixation
    LoopInitiator palabras loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = len(words.split(','))
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      Routine word
    LoopTerminator palabras
    Routine free_recall
    LoopInitiator math_cuenta2 loopType="TrialHandler"
      Selected rows = $idx_random
      conditionsFile = conditions_cuentas.csv
      isTrials = False
      loopType = random
      nReps = 1
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      conditions:
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      Routine math
    LoopTerminator math_cuenta2
  LoopTerminator trials
  Routine fin
